<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/Volumes/Transcend/PhD/Metabolomics_datasets/Standards/Zik_Std1_1_23Oct18.mzXML</file>
            <file>/Volumes/Transcend/PhD/Metabolomics_datasets/Standards/Zik_Std1_2_23Oct18.mzXML</file>
            <file>/Volumes/Transcend/PhD/Metabolomics_datasets/Standards/Zik_Std2_1_23Oct18.mzXML</file>
            <file>/Volumes/Transcend/PhD/Metabolomics_datasets/Standards/Zik_Std2_2_23Oct18.mzXML</file>
            <file>/Volumes/Transcend/PhD/Metabolomics_datasets/Standards/Zik_Std3_1_23Oct18.mzXML</file>
            <file>/Volumes/Transcend/PhD/Metabolomics_datasets/Standards/Zik_Std3_2_23Oct18.mzXML</file>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>0.0</min>
                <max>26.03</max>
            </retention_time>
            <polarity>POSITIVE</polarity>
            <spectrum_type>CENTROIDED</spectrum_type>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">10000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>0.0</min>
                <max>26.03</max>
            </retention_time>
            <polarity>POSITIVE</polarity>
            <spectrum_type>CENTROIDED</spectrum_type>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">10000.0</parameter>
        <parameter name="Min highest intensity">100000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms3ppm</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">5.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN"/>
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                </parameter>
                <parameter name="min feature height">10000.0</parameter>
                <parameter name="coefficient/area threshold">20.0</parameter>
                <parameter name="Peak duration range">
                    <min>0.0</min>
                    <max>1.5</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.0</min>
                    <max>0.4</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.mztabexport.MzTabExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/Users/anamaria/Desktop/mzmine/221119/standards/{}.mzTab</current_file>
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        </parameter>
        <parameter name="Include all peaks">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/Users/anamaria/Desktop/mzmine/221119/standards/{}.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak area</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
